PsychoPy2experiment version="2021.2.0"
Settings
  Data filename = '../data/%s_%s' % (expInfo['participant'], expInfo['date'])
  Experiment info = {'participant': '1000', 'session': '01'}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Units = norm
  Window size (pixels) = [1920, 1080]
  color = black
  expName = stroop
  logging level = warning
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Routines
  Routine trial
    CodeComponent correctAnswerInit
      Code Type = Auto->JS
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      Begin Routine:
        if letterColor == 'red':
            expInfo['correctAnswer'] = correctKeyRed
            correctAnswer = correctKeyRed
        elif letterColor == 'green':
            expInfo['correctAnswer'] = correctKeyGreen
            correctAnswer = correctKeyGreen
        else:
            print("Error, unexpected letterColor:", letterColor)
            sys.exit(0)
    TextComponent fixation
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    TextComponent word
      color [set every repeat] = $letterColor
      letterHeight = 0.2
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $text
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    KeyboardComponent resp
      allowedKeys = 'left', 'right'
      correctAns = $correctAnswer
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.5
      storeCorrect = True
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  Routine instructPractice
    CodeComponent instructPracticeInit
      Code Type = Auto->JS
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      Begin Experiment:
        practiceLoopIteration = 1
      Begin Routine:
        if correctKeyRed == 'left':
            practiceInstructions="""
        In the %s posture

        Please press;
        %s for red XXXX LETTERS     %s for green XXXX LETTERS

        Let's start with a few practice trials
        This is block %d out of 2 practice blocks

        Please respond as quickly and accuractly as possible to the color
        (red or green) in which the  letter-string appeared.  Ignore all other
        aspects of the letter-string, including its meaning.

        For example, if you see RED, respond
        with %s button for green letter-strings.

        Press any key to continue
        """ % (posture, correctKeyRed, correctKeyGreen, practiceLoopIteration, correctKeyGreen)
        else:
            practiceInstructions="""
        In the %s posture

        Please press;
        %s for green LETTERS    %s for red LETTERS

        Let's start with a few practice trials
        This is block %d out of 2 practice blocks

        Please respond as quickly and accuractly as possible to the color
        (red or green) in which the  letter-string appeared.  Ignore all other
        aspects of the letter-string, including its meaning.

        For example, if you see GREEN, respond
        with %s button for red letter-strings.

        Press any key to continue
        """ % (posture, correctKeyGreen, correctKeyRed, practiceLoopIteration, correctKeyRed)
      End Routine:
        practiceLoopIteration += 1
    TextComponent instructPracticeText
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $practiceInstructions
      wrapWidth = 10
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    KeyboardComponent instructPracticeReady
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine thanks
    TextComponent thanksText
      color = $[1, 1, 1]
      font = arial
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        This is the end of the experiment.

        Thanks!
  Routine initializeExperiment
    CodeComponent initializeCouterBalancing
      Code Type = Auto->JS
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      Begin Experiment:
        # create conditions based on participant number
        participantId = int(expInfo['participant'])

        # 4 condition ranges
        if participantId >= 1000 and participantId <= 1999:
            # condition 1 start standing use red-green l/r keymap
            posture = 'standing'
            correctKeyRed = 'left'
            correctKeyGreen = 'right'
        elif participantId >= 2000 and participantId <= 2999:
            # condition 2 start standing use green-red l/r keymap
            posture = 'standing'
            correctKeyRed = 'right'
            correctKeyGreen = 'left'
        elif participantId >= 3000 and participantId <= 3999:
            # condition 3 start sitting use red-green l/r keymap
            posture = 'sitting'
            correctKeyRed = 'left'
            correctKeyGreen = 'right'
        elif participantId >= 4000 and participantId <= 4999:
            # condition 4 start sitting use green-red l/r keymap
            posture = 'sitting'
            correctKeyRed = 'right'
            correctKeyGreen = 'left'
        else:
            # croak immediately if experimenter gives invalid
            # participant id, maybe make this for testing?
            print("Invalid participant id entered: ", participantId)
            print("Use range 1000-4999 for participant")
            sys.exit(0)

        # put correct keys in experiment info so saved in
        # trial output
        expInfo['posture'] = posture
        expInfo['correctKeyRed'] = correctKeyRed
        expInfo['correctKeyGreen'] = correctKeyGreen
  Routine setupPosture
    CodeComponent setupPostureInit
      Code Type = Auto->JS
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      Begin Experiment:
        setupPostureInstructions = """
        Before beginning, the experiment
        supervisor will position you in the
        correct initial posture.

        Posture: %s

        Once you are ready, press any key
        to begin practicing the  experiment.
        """ % (posture.upper())
    TextComponent setupPostureText
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $setupPostureInstructions
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    KeyboardComponent setupPostureReady
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    SoundComponent setupPostureAlert
      sound = F
      startVal [time (s)] = 1
      stopVal [duration (s)] = 5
      volume = 1000
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  Routine instructTrial
    CodeComponent instructTrialInit
      Code Type = Auto->JS
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      Begin Experiment:
        trialLoopIteration = 1
      Begin Routine:
        if correctKeyRed == 'left':
            trialInstructions="""
        Take a small break and then CHECK
        your posture before continuing

        You should still be in the %s posture

        OK. Ready for the real thing?

        Remember, ignore the word itself; press:
        %s for red LETTERS
        %s for green LETTERS
        (Esc will quit)

        This is block %d out of 4 experiment blocks

        Press any key to continue
        """ % (posture, correctKeyRed, correctKeyGreen, trialLoopIteration)
        else:
            trialInstructions="""
        Take a small break and then CHECK
        your posture before continuing

        You should still be in the %s posture

        OK. Ready for the real thing?

        Remember, ignore the word itself; press:
        %s for green LETTERS
        %s for red LETTERS
        (Esc will quit)

        This is block %d out of 4 experiment blocks

        Press any key to continue
        """ % (posture, correctKeyGreen, correctKeyRed, trialLoopIteration)
      End Routine:
        trialLoopIteration += 1
    TextComponent instructTrialText
      color = $[1, 1, 1]
      letterHeight = 0.1
      startVal [time (s)] = 0
      text [set every repeat] = $trialInstructions
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    KeyboardComponent instructTrialReady
      correctAns = thisTrial.corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = nothing
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  Routine trialFeedback
    CodeComponent message
      Code Type = Auto->JS
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      Begin Experiment:
        #msg variable just needs some value at start
        msg=''
        sound_hz=60
      Begin Routine:
        if resp.corr:#stored on last run routine
          msg="."
          sound_hz=60
        else:
          msg="."
          sound_hz=440
    TextComponent feedback_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = $msg
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    SoundComponent sound_2
      sound = $sound_hz
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine practiceFeedback
    CodeComponent feedbackPracticeInit
      Code Type = Py
      Begin Experiment:
        #msg variable just needs some value at start
        msg=''
        sound_hz=60
      Begin Routine:
        if resp.corr:#stored on last run routine
          msg="Correct! RT=%.3f" %(resp.rt)
          sound_hz=60
        else:
          msg="Oops! That was wrong.\nPlease respond as fast and accuractly as you can."
          sound_hz=440
    TextComponent feedbackPracticeMessage
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $msg
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    SoundComponent feedbackPracticeSound
      sound = $sound_hz
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine initializeExperiment2
    CodeComponent initializeCounterbalancing2
      Code Type = Auto->JS
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      Begin Routine:
        if posture == 'sitting':
            posture = 'standing'
        elif posture == 'standing':
            posture = 'sitting'
        else:
            print("unknown posture: ", posture)
            sys.exit(0)

        expInfo['posture'] = posture

        practiceLoopIteration = 1
        trialLoopIteration = 1
  Routine setupPosture2
    CodeComponent setupPosture2Init
      Code Type = Auto->JS
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      Begin Routine:
        setupPosture2Instructions = """
        Before continuing, the experiment
        supervisor will position you in the
        next experiment posture:

        Posture: %s

        Once you are ready, press any key
        to begin practicing the experiment.
        """ % (posture.upper())
    TextComponent setupPosture2Text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $setupPosture2Instructions
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    KeyboardComponent setupPosture2Ready
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    SoundComponent setupPosture2Sound
      sound = posture-alert.wav
      startVal [time (s)] = 0.0
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Flow
  Routine initializeExperiment
  Routine setupPosture
  LoopInitiator practice_loop loopType="TrialHandler"
    loopType = sequential
    nReps = 2
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    Routine instructPractice
    LoopInitiator practice loopType="TrialHandler"
      conditionsFile = stroop-replication-trialtypes.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'text': 'XXX', 'letterColor': 'red', 'congruent': 'neutral'},
        {'text': 'XXX', 'letterColor': 'green', 'congruent': 'neutral'},
        {'text': 'XXXXX', 'letterColor': 'red', 'congruent': 'neutral'},
        {'text': 'XXXXX', 'letterColor': 'green', 'congruent': 'neutral'},
        {'text': 'green', 'letterColor': 'red', 'congruent': 'incongruent'},
        {'text': 'red', 'letterColor': 'green', 'congruent': 'incongruent'},
        {'text': 'green', 'letterColor': 'red', 'congruent': 'incongruent'},
        {'text': 'red', 'letterColor': 'green', 'congruent': 'incongruent'},
        {'text': 'red', 'letterColor': 'red', 'congruent': 'congruent'},
        {'text': 'green', 'letterColor': 'green', 'congruent': 'congruent'},
        {'text': 'red', 'letterColor': 'red', 'congruent': 'congruent'},
        {'text': 'green', 'letterColor': 'green', 'congruent': 'congruent'},
        {'text': 'XXX', 'letterColor': 'red', 'congruent': 'neutral'},
        {'text': 'XXX', 'letterColor': 'green', 'congruent': 'neutral'},
        {'text': 'XXXXX', 'letterColor': 'red', 'congruent': 'neutral'},
        {'text': 'XXXXX', 'letterColor': 'green', 'congruent': 'neutral'},
        {'text': 'green', 'letterColor': 'red', 'congruent': 'incongruent'},
        {'text': 'red', 'letterColor': 'green', 'congruent': 'incongruent'},
        {'text': 'green', 'letterColor': 'red', 'congruent': 'incongruent'},
        {'text': 'red', 'letterColor': 'green', 'congruent': 'incongruent'},
        {'text': 'red', 'letterColor': 'red', 'congruent': 'congruent'},
        {'text': 'green', 'letterColor': 'green', 'congruent': 'congruent'},
        {'text': 'red', 'letterColor': 'red', 'congruent': 'congruent'}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
      Routine trial
      Routine practiceFeedback
    LoopTerminator practice
  LoopTerminator practice_loop
  LoopInitiator trial_loop loopType="TrialHandler"
    loopType = sequential
    nReps = 4
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    Routine instructTrial
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = stroop-replication-trialtypes.xlsx
      endPoints = [1, 2]
      loopType = random
      nReps = 1
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      conditions:
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      Routine trial
      Routine trialFeedback
    LoopTerminator trials
  LoopTerminator trial_loop
  Routine initializeExperiment2
  Routine setupPosture2
  LoopInitiator practice_loop2 loopType="TrialHandler"
    loopType = sequential
    nReps = 2
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    Routine instructPractice
    LoopInitiator practice2 loopType="TrialHandler"
      conditionsFile = stroop-replication-trialtypes.xlsx
      loopType = random
      nReps = 1
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      conditions:
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      Routine trial
      Routine practiceFeedback
    LoopTerminator practice2
  LoopTerminator practice_loop2
  LoopInitiator trial_loop2 loopType="TrialHandler"
    loopType = sequential
    nReps = 4
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    Routine instructTrial
    LoopInitiator trials2 loopType="TrialHandler"
      conditionsFile = stroop-replication-trialtypes.xlsx
      loopType = random
      nReps = 1
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      conditions:
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      Routine trial
      Routine trialFeedback
    LoopTerminator trials2
  LoopTerminator trial_loop2
  Routine thanks
