PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = degFlatPos
  Window size (pixels) = [1920, 1080]
  color = black
  expName = task-switching-replication
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Routines
  Routine trial
    ImageComponent taskCueImage
      image [set every repeat] = $cueFileName
      size = (10.0, 10.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    PolygonComponent taskTarget
      fillColor [set every repeat] = $shapeColor
      lineColor [set every repeat] = $shapeColor
      shape = triangle
      size = (7.5, 7.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.5
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    KeyboardComponent taskResponse
      forceEndRoutine = True
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1.5
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  Routine instructions
    TextComponent text
      letterHeight = 1.0
      startVal [time (s)] = 0.0
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      text:
        Respond to the cue.

        Solid box, respond to color.
        left for green, right for yellow.

        Dashed box, respond to shape.
        left for triangle, right for square

        Press any key to begin experiment
    KeyboardComponent key_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine feedback
    TextComponent feedbackText
      letterHeight = 1.0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Incorrect Response
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    SoundComponent feedbackSound
      sound = A
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine delay
    TextComponent delayText
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = task-switching-replication-trialtypes.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'cueType': 'dashed', 'cueFileName': 'dashed-rectangle.png', 'shapeType': 'triangle', 'shapeColor': 'yellow', 'targetFileName': 'yellow-triangle.png'},
      {'cueType': 'dashed', 'cueFileName': 'dashed-rectangle.png', 'shapeType': 'triangle', 'shapeColor': 'blue', 'targetFileName': 'blue-triangle.png'},
      {'cueType': 'dashed', 'cueFileName': 'dashed-rectangle.png', 'shapeType': 'square', 'shapeColor': 'yellow', 'targetFileName': 'yellow-square.png'},
      {'cueType': 'dashed', 'cueFileName': 'dashed-rectangle.png', 'shapeType': 'square', 'shapeColor': 'blue', 'targetFileName': 'blue-square.png'},
      {'cueType': 'solid', 'cueFileName': 'solid-rectangle.png', 'shapeType': 'triangle', 'shapeColor': 'yellow', 'targetFileName': 'yellow-triangle.png'},
      {'cueType': 'solid', 'cueFileName': 'solid-rectangle.png', 'shapeType': 'triangle', 'shapeColor': 'blue', 'targetFileName': 'blue-triangle.png'},
      {'cueType': 'solid', 'cueFileName': 'solid-rectangle.png', 'shapeType': 'square', 'shapeColor': 'yellow', 'targetFileName': 'yellow-square.png'},
      {'cueType': 'solid', 'cueFileName': 'solid-rectangle.png', 'shapeType': 'square', 'shapeColor': 'blue', 'targetFileName': 'blue-square.png'}]
    Routine trial
    Routine feedback
    Routine delay
  LoopTerminator trials
